{
    "analysis_tasks": [
        {
            "task": "FiducialCorrelationWarp",
            "module": "merlin.analysis.warp",
            "parameters": {
                "write_fiducial_images": false
            }
        },
        {
            "task": "DeconvolutionPreprocessGuo",
            "module": "merlin.analysis.preprocess",
            "parameters": {
                "warp_task": "FiducialCorrelationWarp",
                "highpass_sigma": 2,
                "decon_sigma": 1.4,
                "decon_filter_size": 9 
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize1",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize2",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize1",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize3",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize2",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize4",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize3",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize5",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize4",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize6",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize5",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize7",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize6",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize8",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize7",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize9",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize8",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "OptimizeIteration",
            "module": "merlin.analysis.optimize",
            "analysis_name": "Optimize10",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "warp_task": "FiducialCorrelationWarp",
                "area_threshold": 5,
                "fov_per_iteration": 50,
                "previous_iteration": "Optimize9",
                "optimize_chromatic_correction": true
            }
        },
        {
            "task": "Decode",
            "module": "merlin.analysis.decode",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "optimize_task": "Optimize10",
                "global_align_task": "SimpleGlobalAlignment",
                "minimum_area": 1,
                "lowpass_sigma": 0.6,
                "crop_width": 100,
                "write_decoded_images": false
            }
        },
        {
            "task": "SimpleGlobalAlignment",
            "module": "merlin.analysis.globalalign"
        },
        {
            "task": "GenerateMosaic",
            "module": "merlin.analysis.generatemosaic",
            "parameters": {
                "global_align_task": "SimpleGlobalAlignment",
                "warp_task": "FiducialCorrelationWarp",
		"microns_per_pixel": 0.106,
                "data_channels": ["DAPI"],
                "separate_files": true
            }
        },
        {
            "task": "PlotPerformance",
            "module": "merlin.analysis.plotperformance",
            "parameters": {
                "preprocess_task": "DeconvolutionPreprocessGuo",
                "optimize_task": "Optimize10",
                "decode_task": "Decode",
                "filter_task": "AdaptiveFilterBarcodes",
                "global_align_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportBarcodes",
            "module": "merlin.analysis.exportbarcodes",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes",
                "columns": ["barcode_id", "global_x", "global_y", "global_z",
                    "x", "y", "fov"]
            }
        },
        {
            "task": "GenerateAdaptiveThreshold",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "decode_task": "Decode",
                "run_after_task": "Optimize10"
            }
        },
        {
            "task": "AdaptiveFilterBarcodes",
            "module": "merlin.analysis.filterbarcodes",
            "parameters": {
                "decode_task": "Decode",
                "adaptive_task": "GenerateAdaptiveThreshold"
            }
        },
        {
            "task": "BoundarySegment",
            "module": "vizgen_merlin.analysis.segment",
            "parameters": {
		"nuclei_channel_name": "DAPI",
		"boundary_channel_name": "ATPase",
		"warp_task": "FiducialCorrelationWarp",
		"global_align_task": "SimpleGlobalAlignment"
            }
        },
	{
            "task": "CleanCellBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "BoundarySegment",
                "global_align_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "CombineCleanedBoundaries",
            "module": "merlin.analysis.segment",
            "parameters": {
                "cleaning_task": "CleanCellBoundaries"
            }
        },
        {
            "task": "RefineCellDatabases",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "BoundarySegment",
                "combine_cleaning_task": "CombineCleanedBoundaries"
            }
        },
        {
            "task": "PartitionBarcodes",
            "module": "merlin.analysis.partition",
            "parameters": {
                "filter_task": "AdaptiveFilterBarcodes",
                "assignment_task": "RefineCellDatabases",
                "alignment_task": "SimpleGlobalAlignment"
            }
        },
        {
            "task": "ExportPartitionedBarcodes",
            "module": "merlin.analysis.partition",
            "parameters": {
                "partition_task": "PartitionBarcodes"
            }
        },
        {
            "task": "ExportCellMetadata",
            "module": "merlin.analysis.segment",
            "parameters": {
                "segment_task": "RefineCellDatabases"
            }
        }
    ]

}
